CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*t(?P<Time>[0-9]{3})(?P<Well>[A-Za-z][0-9]{2})f(?P<Site>[0-9]*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[0-9]{12})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Mito': u'Plate', u'ProjectionMito': u'Plate'}, {u'Mito': u'Well', u'ProjectionMito': u'Well'}, {u'Mito': u'Time', u'ProjectionMito': None}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory doesnot contain "projection")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "projection")
    Name to assign these images:ProjectionMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Plate
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:ProjectionMito
    Name the output image:IllumProjection
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:ProjectionMito
    Name the output image:CorrectedProjMito
    Select the illumination function:IllumProjection
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrectedProjMito
    Name the primary objects to be identified:LargeStationaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:LargeStationaryObjects
    Name the output objects:ExpandedLargeObjects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Mito
    Name the output image:CorrectedMito
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

MaskImage:[module_num:10|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
    Select the input image:CorrectedMito
    Name the output image:MaskedMito
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedLargeObjects
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    Invert the mask?:Yes

MaskImage:[module_num:11|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
    Select the input image:CorrectedProjMito
    Name the output image:MaskedProjMito
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedLargeObjects
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    Invert the mask?:Yes

MeasureImageQuality:[module_num:12|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:4
    Select the images to measure:CorrectedMito,MaskedMito,MaskedProjMito,Mito,ProjectionMito
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Select a thresholding method:RobustBackground
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    Select a thresholding method:Background
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
Crop:[module_num:13|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
    Select the input image:MaskedMito
    Name the output image:CroppedMito
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1,end
    Top and bottom rectangle positions:1,end
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    Remove empty rows and columns?:All
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
Crop:[module_num:14|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
    Select the input image:MaskedProjMito
    Name the output image:CroppedProjMito
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:CroppedMito
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:CroppedMito
    Name the primary objects to be identified:AllMito
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:ImageQuality_ThresholdRobustBackground_MaskedMito
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:CorrectedProjMito
    Name the primary objects to be identified:StationaryMito
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:4
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:ImageQuality_ThresholdOtsu_MaskedProjMito_2W
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:Yes
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    Name the output image:StationaryMitoOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:StationaryMito

ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:StationaryMito
    Name the output objects:ExpandedStationaryMito
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MaskObjects:[module_num:19|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
    Select objects to be masked:AllMito
    Name the masked objects:MotileMito
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandedStationaryMito
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.75
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:Yes
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    Name the output image:MotileMitoOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:MotileMito

TrackObjects:[module_num:21|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
    Choose a tracking method:LAP
    Select the objects to track:MotileMito
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    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:Tracked
    Select the movement model:Both
    Number of standard deviations for search radius:10
    Search radius limit, in pixel units (Min,Max):2.0,10.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:80
    Split alternative cost:1
    Merge alternative cost:1
    Maximum gap displacement, in pixel units:10
    Maximum split score:50
    Maximum merge score:10
    Maximum temporal gap, in frames:10
    Filter objects by lifetime?:No
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    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
TrackObjects:[module_num:22|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
    Choose a tracking method:LAP
    Select the objects to track:StationaryMito
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    Select display option:Color Only
    Save color-coded image?:No
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    Select the movement model:Both
    Number of standard deviations for search radius:10
    Search radius limit, in pixel units (Min,Max):1,10.0
    Run the second phase of the LAP algorithm?:No
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    Filter objects by lifetime?:No
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
RescaleIntensity:[module_num:23|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
    Select the input image:CroppedMito
    Name the output image:CroppedMito_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CroppedMito_RescaleIntensity
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:MotileMito
    Select outline color:blue
    Select objects to display:LargeStationaryObjects
    Select outline color:red
    Select objects to display:StationaryMito

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:CroppedMito_RescaleIntensity
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|cropped/\\\\g<Plate>/\\\\g<Well>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Tile:[module_num:26|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
    Select an input image:CroppedMito
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:Tracked

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:StationaryMitoOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Plate>/\\\\g<Well>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:MotileMitoOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:
    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Plate>/\\\\g<Well>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay/\\\\g<Plate>/\\\\g<Well>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\\\\g<Plate>_\\\\g<Well>_f\\\\g<Site>_Image.csv
    Use the object name for the file name?:No
    Data to export:MotileMito
    Combine these object measurements with those of the previous object?:No
    File name:\\\\g<Plate>_\\\\g<Well>_f\\\\g<Site>_MotileMoto.csv
    Use the object name for the file name?:No
    Data to export:StationaryMito
    Combine these object measurements with those of the previous object?:No
    File name:\\\\g<Plate>_\\\\g<Well>_f\\\\g<Site>_StationaryMito.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\\\\g<Plate>_\\\\g<Well>_f\\\\g<Site>_Object_relationships.csv
    Use the object name for the file name?:No
